PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = TSRlearn_practice
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine startup_settings
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    CodeComponent import_packages
      Code Type = Py
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      Begin Experiment:
        from pathlib import Path
        import csv
        import numpy as np
        import atexit
    CodeComponent function_definitions
      Code Type = Py
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      Begin Experiment:
        # log function that saves when import task events happen to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)

        # function for setting triggers when comps appear
        def send_onset_trigger(stim, trig_number):
            #record exact onset on the global clock
            win.timeOnFlip(stim, 'tStartRefresh')
            send_trigger(trig_number)


        from ast import literal_eval
        # function that matches position keywords to position (x,y - coord) tuples
        def resolve_pos(val):
            """Return a (x,y) tuple from various spreadsheet formats."""
            #Already a tuple/list/ndarray -> normalize to tuple
            if isinstance(val, (list, tuple, np.ndarray)):
                return tuple(val)
            # Name like "left_pos" -> look up
            if isinstance(val, str):
                name = val.strip()
                if name in POS:
                    return POS[name]
                # Or literal like "(-0.4, 0.2)" in the cell
                try:
                    parsed = literal_eval(name)
                    if isinstance(parsed, (list, tuple)) and len(parsed) == 2:
                        return tuple(parsed)
                except Exception:
                    pass
                    raise ValueError(f"Unrecognized position value: {val!r}")
                    raise TypeError(f"Unsupported position type: {type(val)}")
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Begin Experiment:
        ## set main experimental variables

        # instruction language
        language = "french" # "french" or "english"

        # keys
        left_key = "left"
        center_key = "up"
        right_key = "right"
        down_key = "down"

        # pos of images (x-coord, y-coord)
        left_pos   = (-0.2, 0.1)
        right_pos  = (0.2, 0.1)
        center_pos = (0.0, 0.1)
        prompt_pos = (0, -0.1)

        # Map positions to keys
        pos_to_key = {
            right_pos: right_key,
            center_pos: center_key,
            left_pos: left_key
        }
        # pos of instructions
        instruc_pos = (0,0)

        # make coordinates match with position description in excel file
        POS = {
            'left':   left_pos,
            'center': center_pos,
            'right':  right_pos
        }

         # timings
        max_response_time = 3 # [s]

         # feedback
        feedback_steps  =  0.06   # steps out of 1 (percent)
        rest_jump       =  0.004 # abs distance to target pos
        animation_time   = 1.4    # [s]

        # too lso wmessage
        too_slow_dur = 0.5

        # breaks (indicate after which learning route you want to break)
        break_dur = 30
        break_after_route = 10

        # replay breaks during learning
        replay_break_dur = 5
        break_interval = 13 # after 13 trials because we have 14 image sequences

        # required streak
        req_streak = 2

        # break when "req_streak" correct routes in a row
        streak_breaks_exp = False

        # duration of response time on retrieval tirals
        retr_dur = 5
        # how long is retr question presented
        retrieval_quest_dur = 3
        retr_dur_slider = 5
        image_dur_retr = 1.5
        fix_dur_retr = 0.5
    CodeComponent bids_logging_functions
      Code Type = Py
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      Begin Experiment:
        # BIDS event logger (no Builder BIDS components needed bc they don't work that well)

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (for the .tsv file)
                self.col_order = [
                    "subject", "trial_type", "block_name", "sequence_name",
                    "route_num",
                    "trial_num",
                    "component_label",
                    "concept_label", "concept_exemplar",
                    "onset", "duration",
                    "type_of_stimulus",
                    "response_time", "response",
                    "response_meaning", "expected_response",
                    "correct"
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # Create the logger once
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
  Routine instructions_01
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    CodeComponent bids_instruc
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part1,
                                trial_type="instruction",
                                type_of_stimulus="instruction_text",
                                component_label="instruction_part1")
      End Routine:
        bids.mark_offset(instruction_part1)
    TextComponent instruction_part1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
        "Welcome to the second part of the experiment.\n "
        "In this part, the task consists of alternating learning phases "
        "and question phases. During the learning phases, you will learn associations between images.\n\n"
        "[Press the return key to continue.]"
        )


        if language == "german":
            instruction_part1.text = (
        "Willkommen zum zweiten Teil des Experiments.\n"
        "In diesem Teil besteht die Aufgabe aus abwechselnden Lernphasen "
        "und Fragephasen. Während der Lernphasen lernen Sie Assoziationen zwischen Bildern.\n\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
           instruction_part1.text = (
        "Bienvenue dans la deuxième partie de l'expérience.\n"
        "Dans cette partie, la tâche consiste à alterner des phases d'apprentissage "
        "et des phases de questions. Pendant les phases d'apprentissage, vous apprendrez des associations entre des images.\n\n"
        "[Appuyez sur la touche Entrée pour continuer.]")
    KeyboardComponent continue_button
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_2
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part2,
                                type_of_stimulus="instructions",
                                component_label="instruction_part2")
      End Routine:
        bids.mark_offset(instruction_part2)
    TextComponent instruction_part2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
        "During the question phases, you will be asked questions about the image "
        "associations you just learned. After each question phase, you will return to a learning phase, "
        "followed again by questions.\n"
        "[Press the return key to continue.]"
        )


        if language == "german":
            instruction_part2.text = (
        "Während der Fragephasen werden Ihnen Fragen zu den Bildassoziationen gestellt, "
        "die Sie gerade gelernt haben. "
        "Nach jeder Fragephase kehren Sie zu einer Lernphase zurück, "
        "auf die erneut Fragen folgen.\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
           instruction_part2.text = (
            "Pendant les phases de questions, on vous posera des questions "
        "sur les associations d'images que vous venez d'apprendre. "
        "Après chaque phase de questions, vous reviendrez à une phase d'apprentissage, "
        "suivie à nouveau de questions.\n"
        "[Appuyez sur la touche Entrée pour continuer.]"
        )
    KeyboardComponent continue_button_2
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_03
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    CodeComponent bids_instruc_3
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part3,
                                type_of_stimulus="instructions",
                                component_label="instruction_part3")
      End Routine:
        bids.mark_offset(instruction_part3)
    TextComponent instruction_part3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
        "In the learning phases, you will learn sequences of "
        "images. You will always start with the first image in a sequence. "
        "Your task is to choose the correct next image in the sequence. "
        "At the beginning, you will not yet know the correct pairings.\n"
        "[Press the return key to continue.]"
        )


        if language == "german":
            instruction_part3.text = (
        "In den Lernphasen lernen Sie Bildsequenzen kennen. "
        "Sie beginnen immer mit dem ersten Bild einer Sequenz. "
        "Ihre Aufgabe ist es, das richtige nächste Bild in der Sequenz auszuwählen. "
        "Zu Beginn kennen Sie die richtigen Paare noch nicht.\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part3.text = (
        "Au cours des phases d'apprentissage, vous apprendrez des séquences d'images. "
        "Vous commencerez toujours par la première image d'une séquence. "
        "Votre tâche consiste à choisir l'image suivante correcte dans la séquence. "
        "Au début, vous ne connaîtrez pas encore les associations correctes.\n"
        "[Appuyez sur la touche Entrée pour continuer.]")
    KeyboardComponent continue_button_3
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_04
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    CodeComponent bids_instruc_4
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
        "You will learn the correct associations step by step through trial and feedback. "
        "After each choice, the correct image will replace the current one, and you will then select the next image in the sequence. "
        "To help you remember the image associations and their order, please imagine a short story that links the images together.\n"
        "[Press the return key to continue.]")



        if language == "german":
            instruction_part4.text = (
        "Sie lernen die richtigen Assoziationen Schritt für Schritt durch Ausprobieren und Feedback. "
        "Nach jeder Auswahl ersetzt das richtige Bild das aktuelle Bild, und Sie wählen dann das nächste Bild in der Reihenfolge aus. "
        "Um sich die Bildassoziationen und ihre Reihenfolge besser merken zu können, stellen Sie sich bitte eine kurze Geschichte vor, die die Bilder miteinander verbindet.\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part4.text = (
        "Vous apprendrez les associations correctes étape par étape grâce à des essais et des commentaires. "
        "Après chaque choix, l'image correcte remplacera l'image actuelle, et vous sélectionnerez ensuite l'image suivante dans la séquence. "
        "Pour vous aider à mémoriser les associations d'images et leur ordre, imaginez une petite histoire qui relie les images entre elles.\n"
        "[Appuyez sur la touche Entrée pour continuer.]"
        )
    KeyboardComponent continue_button_4
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_05
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    CodeComponent bids_instruc_5
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part5,
                                type_of_stimulus="instructions",
                                component_label="instruction_part5")
      End Routine:
        bids.mark_offset(instruction_part5)
    TextComponent instruction_part5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part5_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part5.text = (
            "First, you will practice the learning trials. "
            "The current image will be shown at the bottom of the screen, and three possible options will appear at the top. "
            "Choose the image you think comes next by pressing the left, center, or right arrow key.\n"
            "[Press the return key to start the practice trials.]"
            )

        if language == "french":
            instruction_part5.text = (
        "Tout d'abord, vous allez vous entraîner à l'aide d'essais d'apprentissage. "
        "L'image actuelle s'affichera en bas de l'écran et trois options possibles apparaîtront en haut. "
        "Choisissez l'image qui, selon vous, vient ensuite en appuyant sur la touche fléchée gauche, centrale ou droite.\n"
        "[Appuyez sur la touche Entrée pour commencer les essais d'entraînement.]"
        )

        if language == "german":
            instruction_part5.text = (
        "Zuerst üben Sie die Lerndurchgänge. "
        "Das aktuelle Bild wird unten auf dem Bildschirm angezeigt, und oben erscheinen drei mögliche Optionen. "
        "Wählen Sie das Bild, von dem Sie glauben, dass es als nächstes kommt, indem Sie die Pfeiltaste nach links, in die Mitte oder nach rechts drücken.\n"
        "[Drücken Sie die Eingabetaste, um die Übungsdurchgänge zu starten.]"
        )
    KeyboardComponent continue_button_5
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine practice_learn_choice
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    PolygonComponent polygon_4
      fillColor [set every frame] = 0.0000, 0.0000, 0.0000
      lineColor [set every frame] = 0.0039, 0.0039, 0.0039
      opacity [set every frame] = 0
      shape = rectangle
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
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    ImageComponent prompt_prc
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_prc
      allowedKeys = left_key, center_key, right_key
      correctAns = $correct_ans
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      syncScreenRefresh = False
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    TextComponent instructions_choose_prc
      letterHeight = 0.03
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_txt_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose_prc.text = (
            "Choose the next image in the sequence!")

        if language == "german":
            instructions_choose_prc.text = (
            "Wählen Sie das nächste Bild in der Sequenz!")

        if language == "french":
            instructions_choose_prc.text = (
            "Choisissez l'image suivante dans la séquence !")
    CodeComponent code_prc
      Code Type = Auto->JS
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp_prc.keys = []
        key_resp_prc.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp_prc.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp_prc.keys = None
            key_resp_prc.rt = None
            responded = False
            continueRoutine = False
            key_resp_prc.corr = None
            # (optionally store that it was a timeout)

        # if there is key selection
        if key_resp_prc.keys:
            if key_resp_prc.keys == left_key:
                chosenPos = left_pos
            elif key_resp_prc.keys == center_key:
                chosenPos = center_pos
            elif key_resp_prc.keys == right_key:
                chosenPos = right_pos

            polygon_4.setPos(chosenPos)
            polygon_4.setOpacity(1.0)

            if key_resp_prc.keys == correctAnsKey:
                key_resp_prc.corr = 1
                polygonCol = "green"
            else:
                key_resp_prc.corr = 0
                polygonCol = "red"

            polygon_4.setFillColor(polygonCol)
            polygon_4.setLineColor(polygonCol)
            polygon_4.draw()
            win.flip()
            responded = True
            core.wait(0.3)
            continueRoutine = False
  Routine practice_learn_feedback
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    CodeComponent animation_control_prc
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_prc_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_prc_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_prc_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    ImageComponent prompt_prc_2
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc_2
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc_2
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc_2
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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  Routine instruction_06
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    CodeComponent bids_instruc_6
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part6,
                                type_of_stimulus="instructions",
                                component_label="instruction_part6")
      End Routine:
        bids.mark_offset(instruction_part6)
    TextComponent instruction_part6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part6_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part6.text = (
            "Now you will practice the retrieval questions.\n"
            "[Press the return key to continue.]"
            )



        if language == "german":
            instruction_part6.text = (
        "Sie werden nun den Gedächtnisabruf üben.\n[Drücke Sie die Eingabetaste, um weiterzumachen.]"
        )

        if language == "french":
                instruction_part6.text = (
        "Vous allez maintenant vous exercer à la récupération de mémoire.\n"
        "[Appuyez sur la touche Entrée pour continuer.]"
        )
    KeyboardComponent continue_button_6
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine practice_retrieval_first_image
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    ImageComponent image_1_prc
      image [set every repeat] = $img_first
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    ImageComponent background_info_2
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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  Routine practice_retrieval_fix_cross_01
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    ImageComponent mask_img1_2
      image = stimuli/mask_images/mask_00.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ImageComponent background_info
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine practice_retrieval_second_image
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    ImageComponent image_2_prc
      image [set every repeat] = $img_second
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    ImageComponent background_info_3
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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  Routine practice_retrieval_fix_cross_02
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    ImageComponent mask_img1
      image = stimuli/mask_images/mask_00.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ImageComponent background_info_4
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine practice_retrieval_response
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    CodeComponent set_sides_options
      Code Type = Auto->JS
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      Begin Experiment:
        yes_position = (0,0)
        no_position=(0,0)

        # place holders
      Begin Routine:
        if opt_left == "yes":
            yes_position = (-0.05, 0)
            no_position = (0.05, 0)
        if opt_left == "no":
            yes_position = (0.05, 0)
            no_position = (-0.05, 0)
    CodeComponent end_routine_after_resp
      Code Type = Auto->JS
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      Begin Routine:
        # initialize
        responded_retr = False

        feedbackClock = None

        routClock = core.Clock()
      Each Frame:
        if resp_prc.keys and not responded_retr:
            responded_retr = True

            if resp_prc.keys == left_key:
                if yes_position ==(-0.05, 0):
                    yes_txt_prc.color = "blue"
                if no_position ==(-0.05, 0):
                    no_txt_prc.color = "blue"

            if resp_prc.keys==right_key:
                if yes_position ==(0.05, 0):
                    yes_txt_prc.color = "blue"
                if no_position ==(0.05, 0):
                    no_txt_prc.color = "blue"




        # Each Frame (am Ende):
        if responded_retr and feedbackClock is None:
            feedbackClock = routClock.getTime()
        if feedbackClock is not None and routClock.getTime() >= feedbackClock + 0.3:
            continueRoutine = False

        if not responded_retr and routClock.getTime() >= retr_dur:
            continueRoutine = False
    TextComponent yes_txt_prc
      color [set every repeat] = white
      letterHeight = 0.035
      pos [set every repeat] = yes_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent no_txt_prc
      color [set every repeat] = white
      letterHeight = 0.035
      pos [set every repeat] = no_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    CodeComponent set_option_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            yes_txt_prc.text = ("yes")
            no_txt_prc.text = ("no")
        if language == "german":
            yes_txt_prc.text = ("ja")
            no_txt_prc.text = ("nein")
        if language == "french":
            yes_txt_prc.text = ("oui")
            no_txt_prc.text = ("non")
    KeyboardComponent resp_prc
      allowedKeys = left_key, right_key
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = retr_dur
      store = first key
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    ImageComponent background_info_6
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur + 5
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  Routine instruction_end_practice
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    CodeComponent bids_instruc_7
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part7,
                                type_of_stimulus="instructions",
                                component_label="instruction_part8")
      End Routine:
        bids.mark_offset(instruction_part7)
    TextComponent instruction_part7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part7_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part7.text = (
            "You finished all the practice trials. Good job! You are now "
            "ready to start with the main task.\n"
            "Press the return key to end this part of the experiment. "
            )



        if language == "german":
            instruction_part7.text = (
        "Sie haben alle Übungsdurchgänge abgeschlossen. Gut gemacht! "
        "Sie sind nun bereit, mit der Hauptaufgabe zu beginnen.\n"
        "Drücken Sie die Eingabetaste, um diesen Teil des Experiments zu beenden. ")

        if language == "french":
                instruction_part7.text = (
        " Vous avez terminé tous les essais pratiques. Bravo! "
        "Vous êtes maintenant prêt à commencer la tâche principale.\n"
        "Appuyez sur la touche Entrée pour terminer cette partie de l'expérience. "
        )
    KeyboardComponent continue_button_8
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine too_slow_Routine_learn
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    CodeComponent determine_start
      Code Type = Auto->JS
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      Begin Routine:
        if responded:
            continueRoutine = False
    TextComponent tooSlowtext
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine too_slow_Routine_retr
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    CodeComponent determine_start_2
      Code Type = Auto->JS
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      Begin Routine:
        if responded_retr:
            continueRoutine = False
    TextComponent tooSlowtext_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext_2.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_2.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext_2.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine practice_retrieval_question
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    TextComponent question_retrieval_prc
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent text_question_retrieval_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Please indicate whether the following two images appeared in this order in the learned sequence. "
                "If yes, press the left arrow key. If no, press the right arrow key.\n"
                "[Press the return key to continue.]"
             )
            if trial_type == 2:
                question_retrieval_prc.text = (
                "You will see one image and then a pair of images. Please indicate which image from the pair is "
                "closer to the image presented first. Respond with the left and right arrow key.\n"
                "[Press the return key to continue.]"
               )
            if trial_type==3:
               question_retrieval_prc.text = (
               "You will see two images. Please indicate how many images lie between them in the learned sequence. "
               "Use the left and right arrow keys to move the slider, and press Return to confirm your response.\n"
                "[Press the return key to continue.]"
           )

        if language == "french":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Veuillez indiquer si les deux images suivantes sont apparues dans cet ordre "
                "dans la séquence apprise. "
                "Si oui, appuyez sur la flèche gauche. Si non, appuyez sur la flèche droite.\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
                )

            if trial_type == 2:
                question_retrieval_prc.text = (
                "Vous verrez d’abord une image, puis une paire d’images. "
                "Veuillez indiquer laquelle des deux images est la plus proche "
                "de l’image présentée en premier. "
                "Répondez à l’aide des flèches gauche et droite.\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
                )

            if trial_type == 3:
                question_retrieval_prc.text = (
                "Vous verrez deux images. "
                "Veuillez indiquer combien d’images se trouvent entre elles "
                "dans la séquence apprise. "
                "Déplacez le curseur à l’aide des flèches gauche et droite. "
                "Validez votre réponse avec la touche Entrée.\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
                )

        if language=="german":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Bitte geben Sie an, ob die folgenden beiden Bilder in dieser Reihenfolge in der gelernten Reihenfolge vorkamen."
                "Wenn ja, drücken Sie die linke Pfeiltaste. Wenn nein, drücken Sie die rechte Pfeiltaste.\n"
                "[Drücke Sie die Eingabetaste, um weiterzumachen.] "
                )
            if trial_type == 2:
                question_retrieval_prc.text = (
                "Sie sehen ein Bilder und zwei weitere. Bitte geben Sie an, welches der beiden Bilder näher an dem "
                "zuerst präsentierten Bild liegt. "
                "Antworten Sie mit der linken und rechten Pfeiltaste.\n"
                "[Drücke Sie die Eingabetaste, um weiterzumachen.] "
                )
            if trial_type==3:
               question_retrieval_prc.text = (
               "Sie werden zwei Bilder sehen. Bitte geben Sie an, wie viele Bilder in der gelernten Reihenfolge zwischen diesen beiden liegen. "
                "Bewegen Sie den Slider mit den Pfeiltasten. "
                "Loggen Sie ihre Antwort mit der Eingabetaste ein.\n"
                "[Drücke Sie die Eingabetaste, um weiterzumachen.] "
                )
    KeyboardComponent continue_button_7
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.5
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  Routine retr_ITI_prc
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    TextComponent fix_cross_retrbegin
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine questions_refl_period_prc
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    TextComponent text_refl_period_questions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent set_text_refl_period_questions
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_refl_period_questions.text = (
            "Think about the two images you are about to see:\n\n"
            "1. Do they appear in the same order as in the learned sequence?\n"
            "2. How many positions apart are they in the learned sequence?"
        )

        if language == "french":
            text_refl_period_questions.text = (
            "Pensez aux deux images que vous allez voir\u00a0:\n\n"
            "1. Apparaissent-elles dans le même ordre que dans la séquence apprise\u00a0?\n"
            "2. Combien de positions les séparent dans la séquence apprise\u00a0?"
        )
    KeyboardComponent continue_button_9
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine reflection_period_prc
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    TextComponent fix_cross_reflretr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reflection_win_dur
      text = +
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    ImageComponent background_info_5
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reflection_win_dur
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  Routine too_slow_Routine_2
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    CodeComponent determine_start_3
      Code Type = Auto->JS
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      Begin Routine:
        if responded_retr_slider:
            continueRoutine = False
    TextComponent tooSlowtext_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_3
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext_3.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_3.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext_3.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine practice_retrieval_distance
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    CodeComponent controlslider_pos_js
      Code Type = Py
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      Begin Routine:
        responded_retr_slider = False
        delayClock = None
        delayDone = False
        chosenDis = None
        is_correct = False
        chosen_num = None
        dist_press_onset = None
      Each Frame:
        #if slider_main.markerPos is None:
            #possible_positions = [0, 1, 2, 3, 4]
            #slider_main.markerPos = random.choice(possible_positions)

        #slider_main.markerPos = max(0, min(4, slider_main.markerPos))

        # only poll once the component has started AND its flip callbacks have run
        if resp_4.status == STARTED and resp_4.tStartRefresh is not None:
            keysPressed = resp_4.getKeys(keyList=[left_key, right_key, center_key, down_key], waitRelease=False)
        else:
            keysPressed = []

        if len(keysPressed) > 0 and not responded_retr_slider:
            chosen_key = keysPressed[0]
            if chosen_key.name == left_key:
                chosenDis = 5
                opt_5.color = "blue"
            elif chosen_key.name == right_key:
                chosenDis = 3
                opt_3.color = "blue"
            elif chosen_key.name == center_key:
                chosenDis = 2
                opt_2.color = "blue"
            elif chosen_key.name == down_key:
                chosenDis = 4
                opt_4.color = "blue"

            resp_4.keys = chosenDis
            resp_4.rt = chosen_key.rt
            resp_4.duration = chosen_key.duration
            resp_4.corr = 1 if chosenDis == distance_correct else 0

            t_kb_start = resp_4.tStartRefresh
            if t_kb_start is None:
                t_kb_start = resp_4.clock.getLastResetTime()
                print(f"[bids] WARNING: resp_4.tStartRefresh was None (retr_distance), "
                      f"using clock reset {t_kb_start:.6f}, frameN={frameN}")
            dist_press_onset = t_kb_start + chosen_key.rt

            responded_retr_slider = True
            delayClock = core.Clock()

        if responded_retr_slider and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False

        #if not responded_retr_slider and retrClock.getTime() >= (retr_dur_slider-1):
            #chooseNowText_3.setOpacity(1)

        if retrClock.getTime() >= retr_dur_slider and not responded_retr_slider:
            continueRoutine = False
    CodeComponent clear_clock_4
      Code Type = Py
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      Begin Routine:
        _resp_4_allKeys = None
        resp_4.clearEvents()
        retrClock = core.Clock()
        retrClock.reset()
    KeyboardComponent resp_4
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = retr_dur_slider
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    TextComponent opt_2
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 2
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    TextComponent opt_3
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (0.05, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 3
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    TextComponent opt_4
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 4
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    TextComponent opt_5
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (-0.05,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 5
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    ImageComponent background_info_7
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider + 5
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  Routine instruction_07
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    CodeComponent bids_instruc_8
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part8,
                                type_of_stimulus="instructions",
                                component_label="instruction_part7")
      End Routine:
        bids.mark_offset(instruction_part8)
    TextComponent instruction_part8
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part8_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part8.text = (
            "During practice, the complete sequence will be shown at the bottom of the screen, "
            "and you can use it to answer the questions.\n"
            "This is only an aid for the practice trials. In the main task the sequence will no longer be shown, "
            "and you will have to reconstruct it from memory to answer.\n"
            "[Press the return key to start the practice trials.]"
            )
        if language == "french":
            instruction_part8.text = (
            "Pendant l'entraînement, la séquence complète sera affichée en bas de l'écran "
            "et vous pourrez l'utiliser pour répondre aux questions.\n"
            "Il s'agit uniquement d'une aide pour les essais d'entraînement. Dans la tâche principale, la séquence ne sera plus affichée "
            "et vous devrez la reconstruire de mémoire pour répondre.\n"
            "[Appuyez sur la touche Entrée pour commencer les essais d'entraînement.]"
            )
        if language == "german":
            instruction_part8.text = (
            "Während der Übung wird die vollständige Sequenz unten auf dem Bildschirm angezeigt, "
            "und Sie können sie zur Beantwortung der Fragen verwenden.\n"
            "Dies ist nur eine Hilfe für die Übungsdurchgänge. In der Hauptaufgabe wird die Sequenz nicht mehr angezeigt, "
            "und Sie müssen sie zur Beantwortung aus dem Gedächtnis rekonstruieren.\n"
            "[Drücken Sie die Eingabetaste, um die Übungsdurchgänge zu starten.]"
            )
    KeyboardComponent continue_button_10
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine startup_settings
  Routine instructions_01
  Routine instructions_02
  Routine instructions_03
  Routine instructions_04
  Routine instructions_05
  LoopInitiator practice_loop_learning loopType="TrialHandler"
    conditionsFile = sequences/main_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'promptFile': 'stimuli/practice_images/anchor.jpg', 'correctFile': 'stimuli/practice_images/cow.jpg', 'dist_01File': 'stimuli/practice_images/bread.jpg', 'dist_02File': 'stimuli/practice_images/plane.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'correct_ans': 'g'},
      {'promptFile': 'stimuli/practice_images/cow.jpg', 'correctFile': 'stimuli/practice_images/ant.jpg', 'dist_01File': 'stimuli/practice_images/banana.jpg', 'dist_02File': 'stimuli/practice_images/glasses.jpg', 'correct_pos': 'left', 'dist01_pos': 'right', 'dist02_pos': 'center', 'correct_ans': 'y'},
      {'promptFile': 'stimuli/practice_images/ant.jpg', 'correctFile': 'stimuli/practice_images/basket.jpg', 'dist_01File': 'stimuli/practice_images/axe.jpg', 'dist_02File': 'stimuli/practice_images/duck.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'correct_ans': 'r'},
      {'promptFile': 'stimuli/practice_images/basket.jpg', 'correctFile': 'stimuli/practice_images/bed.jpg', 'dist_01File': 'stimuli/practice_images/belt.jpg', 'dist_02File': 'stimuli/practice_images/bread.jpg', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'correct_ans': 'r'},
      {'promptFile': 'stimuli/practice_images/bed.jpg', 'correctFile': 'stimuli/practice_images/belt.jpg', 'dist_01File': 'stimuli/practice_images/anchor.jpg', 'dist_02File': 'stimuli/practice_images/desk.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'correct_ans': 'y'}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
    Routine practice_learn_choice
    Routine practice_learn_feedback
    Routine too_slow_Routine_learn
  LoopTerminator practice_loop_learning
  Routine instruction_06
  Routine instruction_07
  LoopInitiator practice_loop_retrieval loopType="TrialHandler"
    conditionsFile = sequences/retr_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_type': 2, 'img_first': 'stimuli/practice_images/ant.jpg', 'img_second': 'stimuli/practice_images/bed.jpg', 'img_third': 'stimuli/practice_images/belt.jpg', 'opt_left': 'stimuli/practice_images/bed.jpg', 'opt_right': 'stimuli/practice_images/belt.jpg', 'correct_side': 'left', 'correct_key': 'left', 'distance_correct': 1, 'image_dur_retr': 1.5, 'fix_dur_retr': 0.2},
      {'trial_type': 3, 'img_first': 'stimuli/practice_images/cow.jpg', 'img_second': 'stimuli/practice_images/basket.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'left', 'distance_correct': 1, 'image_dur_retr': 2, 'fix_dur_retr': 0.5},
      {'trial_type': 1, 'img_first': 'stimuli/practice_images/bed.jpg', 'img_second': 'stimuli/practice_images/cow.jpg', 'img_third': None, 'opt_left': 'yes', 'opt_right': 'no', 'correct_side': 'right', 'correct_key': 'right', 'distance_correct': 2, 'image_dur_retr': 1.2, 'fix_dur_retr': 0.2},
      {'trial_type': 3, 'img_first': 'stimuli/practice_images/cow.jpg', 'img_second': 'stimuli/practice_images/belt.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'right', 'distance_correct': 3, 'image_dur_retr': 2, 'fix_dur_retr': 0.5}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
    Routine retr_ITI_prc
    Routine questions_refl_period_prc
    Routine practice_retrieval_first_image
    Routine practice_retrieval_fix_cross_01
    Routine practice_retrieval_second_image
    Routine practice_retrieval_fix_cross_02
    Routine reflection_period_prc
    Routine practice_retrieval_response
    Routine too_slow_Routine_retr
    Routine practice_retrieval_distance
    Routine too_slow_Routine_2
  LoopTerminator practice_loop_retrieval
  Routine instruction_end_practice
